CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<myPath>.*)
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "Ecad")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "phalloidin")
    Name to assign these images:phal
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ecad")
    Name to assign these images:ecad
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

ColorToGray:[module_num:5|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
    Select the input image:ecad
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:DAPI_ecad
    Channel number:2
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    Image name:GFP_ecad

ColorToGray:[module_num:6|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
    Select the input image:phal
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:DAPI_phal_pre
    Channel number:2
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    Image name:GFP_phal_pre

Align:[module_num:7|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:DAPI_ecad
    Name the first output image:aligned_DAPI_ecad
    Select the second input image:DAPI_phal_pre
    Name the second output image:DAPI_phal
    Select the additional image:GFP_phal_pre
    Name the output image:GFP_phal
    Select how the alignment is to be applied:Similarly

IdentifyObjectsManually:[module_num:8|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
    Select the input image:GFP_ecad
    Name the objects to be identified:reg_ecad

ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:invert_GFP_ecad
    Image or measurement?:Image
    Select the first image:GFP_ecad
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MaskImage:[module_num:10|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
    Select the input image:invert_GFP_ecad
    Name the output image:mask_GFP_ecad
    Use objects or an image as a mask?:Objects
    Select object for mask:reg_ecad
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    Invert the mask?:No

RescaleIntensity:[module_num:11|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
    Select the input image:mask_GFP_ecad
    Name the output image:enhance_GFP_ecad
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:12|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:enhance_GFP_ecad
    Image or measurement?:Image
    Select the first image:mask_GFP_ecad
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:13|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:enhance_GFP_ecad
    Name the primary objects to be identified:GFP_ecad_cells_before
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.6
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:14|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
    Select the input objects:GFP_ecad_cells_before
    Name the output objects:GFP_ecad_cells
    Select the operation:Add partial dividing lines between objects
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
ImageMath:[module_num:15|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:invert_GFP_phal
    Image or measurement?:Image
    Select the first image:GFP_phal
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MaskImage:[module_num:16|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
    Select the input image:invert_GFP_phal
    Name the output image:mask_GFP_ALLphal
    Use objects or an image as a mask?:Objects
    Select object for mask:reg_ecad
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    Invert the mask?:Yes

RescaleIntensity:[module_num:17|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
    Select the input image:mask_GFP_ALLphal
    Name the output image:enhance_GFP_ALLphal
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:enhance_GFP_ALLphal
    Name the primary objects to be identified:GFP_ALLphal_cells_before
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:19|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
    Select the input objects:GFP_ALLphal_cells_before
    Name the output objects:GFP_ALLphal_cells
    Select the operation:Add partial dividing lines between objects
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP_ecad
    Name the output image:GFP_ecad_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:GFP_ecad_cells

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP_phal
    Name the output image:GFP_ALLphal_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:GFP_ALLphal_cells

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:GFP_ecad_cells
    Name the output image:GFP_ecad_cells_image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:GFP_ALLphal_cells
    Name the output image:GFP_ALLphal_cells_image
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:GFP_ecad_cells_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:ecad
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP_ecad_cells_image
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:GFP_ecad_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:ecad
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP_ecad_overlay
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:GFP_ALLphal_cells_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:phal
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP_ALLphal_cells_image
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:mask_GFP_ALLphal
    Select method for constructing file names:From image filename
    Select image name for file prefix:phal
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP_ALLphal_overlay
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:DAPI_ecad
    Select method for constructing file names:From image filename
    Select image name for file prefix:ecad
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DAPI_align
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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