CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<myPath>.*)
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "MAX")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "phalloidin")
    Name to assign these images:gfp
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

ColorToGray:[module_num:5|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
    Select the input image:gfp
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:2
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    Image name:GFP
    Channel number:1
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    Image name:DAPI

ImageMath:[module_num:6|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:DAPI_Ecad_image
    Image or measurement?:Image
    Select the first image:DAPI
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GFP
    Multiply the second image by:2
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
IdentifyObjectsManually:[module_num:7|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
    Select the input image:GFP
    Name the objects to be identified:Ass1_pos

IdentifyObjectsManually:[module_num:8|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
    Select the input image:GFP
    Name the objects to be identified:GS_pos

IdentifyObjectsManually:[module_num:9|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
    Select the input image:GFP
    Name the objects to be identified:mid_pos

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:periportal_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:Ass1_pos

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Ass1_pos
    Name the output image:periportal_image
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:periportal_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_periportal_region_image
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:periportal_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_periportal_region_overlay
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:pericentral_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:GS_pos

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:GS_pos
    Name the output image:pericentral_image
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:pericentral_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_pericentral_region_image
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:pericentral_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_pericentral_region_overlay
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:midzone_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:mid_pos

ConvertObjectsToImage:[module_num:19|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
    Select the input objects:mid_pos
    Name the output image:midzone_image
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:midzone_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_midzone_region_image
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:midzone_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_midzone_region_overlay
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ImageMath:[module_num:22|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NOTperiportal_image
    Image or measurement?:Image
    Select the image:periportal_image
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:NOTperiportal_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NOTperiportal_region_image
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
