CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:45
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<myPath>.*)
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "_b1_")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_b2")
    Name to assign these images:MAXb2
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_b3")
    Name to assign these images:MAXb3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_b1") (file doesnot contain "image")
    Name to assign these images:MAXb1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_periportal_region_image")
    Name to assign these images:periportal_region
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "pericentral_region_image")
    Name to assign these images:pericentral_region
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "midzone_region_image")
    Name to assign these images:midzone_region
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "NOTperiportal_region_image")
    Name to assign these images:NOTperiportal_region
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

ColorToGray:[module_num:5|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
    Select the input image:MAXb1
    Conversion method:Split
    Image type:Channels
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    Channel count:5
    Channel number:1
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    Image name:DAPI_b1
    Channel number:3
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    Image name:Gold_b1
    Channel number:4
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    Image name:Red_b1
    Channel number:5
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    Image name:Farred_b1
    Channel number:6
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    Image name:Cy7_b1

ColorToGray:[module_num:6|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
    Select the input image:MAXb2
    Conversion method:Split
    Image type:Channels
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    Channel count:5
    Channel number:1
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    Image name:DAPI_b2_pre
    Channel number:3
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    Image name:Gold_b2_pre
    Channel number:4
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    Image name:Red_b2_pre
    Channel number:5
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    Image name:Farred_b2_pre
    Channel number:6
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    Image name:Cy7_b2_pre

ColorToGray:[module_num:7|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
    Select the input image:MAXb3
    Conversion method:Split
    Image type:Channels
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    Channel count:5
    Channel number:1
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    Image name:DAPI_b3_pre
    Channel number:3
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    Image name:Gold_b3_pre
    Channel number:4
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    Image name:Red_b3_pre
    Channel number:5
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    Image name:Farred_b3_pre
    Channel number:6
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    Image name:Cy7_b3_pre

ConvertImageToObjects:[module_num:8|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
    Select the input image:periportal_region
    Name the output object:periportal_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:9|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
    Select the input image:pericentral_region
    Name the output object:pericentral_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:10|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
    Select the input image:midzone_region
    Name the output object:midzone_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:11|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
    Select the input image:NOTperiportal_region
    Name the output object:NOTperiportal_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

Align:[module_num:12|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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:DAPI_b1
    Name the first output image:DAPI_b1_pre
    Select the second input image:GFP_cells_image
    Name the second output image:GFP_cells_image_align

Align:[module_num:13|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:DAPI_b1
    Name the first output image:DAPI_b1_align
    Select the second input image:DAPI_b2_pre
    Name the second output image:DAPI_b2_align
    Select the additional image:Gold_b2_pre
    Name the output image:Gold_b2
    Select how the alignment is to be applied:Similarly
    Select the additional image:Red_b2_pre
    Name the output image:Red_b2
    Select how the alignment is to be applied:Similarly
    Select the additional image:Farred_b2_pre
    Name the output image:Farred_b2
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cy7_b2_pre
    Name the output image:Cy7_b2
    Select how the alignment is to be applied:Similarly

Align:[module_num:14|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:DAPI_b1
    Name the first output image:DAPI_b2_align2
    Select the second input image:DAPI_b3_pre
    Name the second output image:DAPI_b3_align
    Select the additional image:Gold_b3_pre
    Name the output image:Gold_b3
    Select how the alignment is to be applied:Similarly
    Select the additional image:Red_b3_pre
    Name the output image:Red_b3
    Select how the alignment is to be applied:Similarly
    Select the additional image:Farred_b3_pre
    Name the output image:Farred_b3
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cy7_b3_pre
    Name the output image:Cy7_b3
    Select how the alignment is to be applied:Similarly

EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Gold_b1
    Name the output image:enhanced_gold_b1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:Red_b1
    Name the output image:enhanced_red_b1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:Farred_b1
    Name the output image:enhanced_farred_b1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:Cy7_b1
    Name the output image:enhanced_cy7_b1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
ImageMath:[module_num:19|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_b1
    Image or measurement?:Image
    Select the first image:enhanced_gold_b1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:enhanced_red_b1
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:enhanced_farred_b1
    Multiply the third image by:2
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    Image or measurement?:Image
    Select the fourth image:enhanced_cy7_b1
    Multiply the fourth image by:2
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
IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:ImageAfterMath_b1
    Name the primary objects to be identified:all_dots_before
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.02,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ExpandOrShrinkObjects:[module_num:21|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
    Select the input objects:all_dots_before
    Name the output objects:sep_dots_pre
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
ExpandOrShrinkObjects:[module_num:22|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
    Select the input objects:sep_dots_pre
    Name the output objects:sep_dots
    Select the operation:Add partial dividing lines between objects
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
MaskObjects:[module_num:23|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
    Select objects to be masked:sep_dots
    Name the masked objects:periportal_sep_dots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:periportal_object
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:24|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
    Select objects to be masked:sep_dots
    Name the masked objects:pericentral_sep_dots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:pericentral_object
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:25|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
    Select objects to be masked:sep_dots
    Name the masked objects:midzone_sep_dots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:midzone_object
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:26|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
    Select objects to be masked:sep_dots
    Name the masked objects:NOTperiportal_sep_dots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NOTperiportal_object
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:27|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
    Select the input image:Gold_b2
    Name the output image:enhanced_gold_b2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:28|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
    Select the input image:Red_b2
    Name the output image:enhanced_red_b2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:29|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
    Select the input image:Farred_b2
    Name the output image:enhanced_farred_b2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:30|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
    Select the input image:Cy7_b2
    Name the output image:enhanced_cy7_b2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:31|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
    Select the input image:Gold_b3
    Name the output image:enhanced_gold_b3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:32|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
    Select the input image:Red_b3
    Name the output image:enhanced_red_b3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:33|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
    Select the input image:Farred_b3
    Name the output image:enhanced_farred_b3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:34|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
    Select the input image:Cy7_b3
    Name the output image:enhanced_cy7_b3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
ImageMath:[module_num:35|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:testing
    Image or measurement?:Image
    Select the first image:enhanced_red_b1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:enhanced_gold_b2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:enhanced_farred_b2
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:enhanced_red_b3
    Multiply the fourth image by:1.0
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
OverlayOutlines:[module_num:36|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_gold_b1
    Name the output image:gold_b1_dots
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:sep_dots

OverlayOutlines:[module_num:37|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_gold_b2
    Name the output image:gold_b2_dots
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:sep_dots

OverlayOutlines:[module_num:38|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_farred_b2
    Name the output image:farred_b2_dots
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:sep_dots

OverlayOutlines:[module_num:39|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI_b1
    Name the output image:sep_ALL_dots_outline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB02FF
    Select objects to display:sep_dots

MeasureObjectIntensity:[module_num:40|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
    Select images to measure:enhanced_cy7_b1, enhanced_cy7_b2, enhanced_cy7_b3, enhanced_farred_b1, enhanced_farred_b2, enhanced_farred_b3, enhanced_gold_b1, enhanced_gold_b2, enhanced_gold_b3, enhanced_red_b1, enhanced_red_b2, enhanced_red_b3
    Select objects to measure:NOTperiportal_sep_dots, midzone_sep_dots, pericentral_sep_dots, periportal_sep_dots

ExportToSpreadsheet:[module_num:41|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<myPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:periportal_sep_dots|Intensity_MinIntensity_enhanced_gold_b1,periportal_sep_dots|Intensity_MinIntensity_enhanced_gold_b2,periportal_sep_dots|Intensity_MinIntensity_enhanced_gold_b3,periportal_sep_dots|Intensity_MinIntensity_enhanced_cy7_b3,periportal_sep_dots|Intensity_MinIntensity_enhanced_cy7_b2,periportal_sep_dots|Intensity_MinIntensity_enhanced_cy7_b1,periportal_sep_dots|Intensity_MinIntensity_enhanced_red_b2,periportal_sep_dots|Intensity_MinIntensity_enhanced_red_b1,periportal_sep_dots|Intensity_MinIntensity_enhanced_red_b3,periportal_sep_dots|Intensity_MinIntensity_enhanced_farred_b1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:b1_b2_b3_
    Overwrite existing files without warning?:No
    Data to export:periportal_sep_dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:42|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<myPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:pericentral_sep_dots|Intensity_UpperQuartileIntensity_enhanced_farred_b2,pericentral_sep_dots|Intensity_UpperQuartileIntensity_enhanced_farred_b1,pericentral_sep_dots|Intensity_UpperQuartileIntensity_enhanced_farred_b3,pericentral_sep_dots|Intensity_UpperQuartileIntensity_enhanced_red_b2,pericentral_sep_dots|Intensity_UpperQuartileIntensity_enhanced_red_b1,pericentral_sep_dots|Intensity_UpperQuartileIntensity_enhanced_red_b3,pericentral_sep_dots|Intensity_UpperQuartileIntensity_enhanced_cy7_b1,pericentral_sep_dots|Intensity_UpperQuartileIntensity_enhanced_cy7_b2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:b1_b2_b3_
    Overwrite existing files without warning?:No
    Data to export:pericentral_sep_dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:43|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<myPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:midzone_sep_dots|Location_Center_Y,midzone_sep_dots|Location_Center_X,midzone_sep_dots|Intensity_LowerQuartileIntensity_enhanced_farred_b1,midzone_sep_dots|Intensity_LowerQuartileIntensity_enhanced_farred_b2,midzone_sep_dots|Intensity_LowerQuartileIntensity_enhanced_farred_b3,midzone_sep_dots|Intensity_LowerQuartileIntensity_enhanced_red_b1,midzone_sep_dots|Intensity_LowerQuartileIntensity_enhanced_red_b2,midzone_sep_dots|Intensity_LowerQuartileIntensity_enhanced_red_b3,midzone_sep_dots|Intensity_LowerQuartileIntensity_enhanced_cy7_b2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:b1_b2_b3_
    Overwrite existing files without warning?:No
    Data to export:midzone_sep_dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:44|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<myPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_gold_b1,NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_gold_b2,NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_gold_b3,NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_farred_b1,NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_farred_b2,NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_farred_b3,NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_cy7_b3,NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_cy7_b2,NOTperiportal_sep_dots|Intensity_MinIntensity_enhanced_cy7_b1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:b1_b2_b3_
    Overwrite existing files without warning?:No
    Data to export:NOTperiportal_sep_dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:sep_ALL_dots_outline
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:sep_ALL_dots_outline_3zones
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
