CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:64
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<myPath>.*)
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "_b1")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_b2_")
    Name to assign these images:MAXb2
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_b3_") (file doesnot contain "_align") (file doesnot contain "_image")
    Name to assign these images:MAXb3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_b1_")
    Name to assign these images:MAXb1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_DAPI_align")
    Name to assign these images:DAPI_align
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ecad")
    Name to assign these images:ecad_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ALLphal_")
    Name to assign these images:ALLphal_image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

ColorToGray:[module_num:5|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
    Select the input image:MAXb2
    Conversion method:Split
    Image type:Channels
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    Channel count:6
    Channel number:1
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    Image name:DAPI_b2_pre
    Channel number:2
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    Image name:GFP_b2_pre
    Channel number:3
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    Image name:Gold_b2_pre
    Channel number:4
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    Image name:Red_b2_pre
    Channel number:5
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    Image name:Farred_b2_pre
    Channel number:6
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    Image name:Cy7_b2_pre

ColorToGray:[module_num:6|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
    Select the input image:MAXb3
    Conversion method:Split
    Image type:Channels
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    Channel count:6
    Channel number:1
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    Image name:DAPI_b3_pre
    Channel number:2
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    Image name:GFP_b3_pre
    Channel number:3
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    Image name:Gold_b3_pre
    Channel number:4
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    Image name:Red_b3_pre
    Channel number:5
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    Image name:Farred_b3_pre
    Channel number:6
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    Image name:Cy7_b3_pre

ColorToGray:[module_num:7|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
    Select the input image:MAXb1
    Conversion method:Split
    Image type:Channels
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    Channel count:6
    Channel number:1
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    Image name:DAPI_b1_pre
    Channel number:2
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    Image name:GFP_b1_pre
    Channel number:3
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    Image name:Gold_b1_pre
    Channel number:4
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    Image name:Red_b1_pre
    Channel number:5
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    Image name:Farred_b1_pre
    Channel number:6
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    Image name:Cy7_b1_pre

Align:[module_num:8|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:DAPI_align
    Name the first output image:DAPI_align_dontuse1
    Select the second input image:DAPI_b1_pre
    Name the second output image:DAPI_b1
    Select the additional image:Red_b1_pre
    Name the output image:Red_b1
    Select how the alignment is to be applied:Similarly
    Select the additional image:Farred_b1_pre
    Name the output image:Farred_b1
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cy7_b1_pre
    Name the output image:Cy7_b1
    Select how the alignment is to be applied:Similarly
    Select the additional image:Gold_b1_pre
    Name the output image:Gold_b1
    Select how the alignment is to be applied:Similarly

Align:[module_num:9|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:DAPI_b1
    Name the first output image:DAPI_b1_align_dontuse2
    Select the second input image:DAPI_b2_pre
    Name the second output image:DAPI_b2
    Select the additional image:Red_b2_pre
    Name the output image:Red_b2
    Select how the alignment is to be applied:Similarly
    Select the additional image:Farred_b2_pre
    Name the output image:Farred_b2
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cy7_b2_pre
    Name the output image:Cy7_b2
    Select how the alignment is to be applied:Similarly
    Select the additional image:Gold_b2_pre
    Name the output image:Gold_b2
    Select how the alignment is to be applied:Similarly

Align:[module_num:10|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:DAPI_b2
    Name the first output image:DAPI_b2_align_dontuse3
    Select the second input image:DAPI_b3_pre
    Name the second output image:DAPI_b3
    Select the additional image:Red_b3_pre
    Name the output image:Red_b3
    Select how the alignment is to be applied:Similarly
    Select the additional image:Farred_b3_pre
    Name the output image:Farred_b3
    Select how the alignment is to be applied:Similarly
    Select the additional image:Cy7_b3_pre
    Name the output image:Cy7_b3
    Select how the alignment is to be applied:Similarly
    Select the additional image:Gold_b3_pre
    Name the output image:Gold_b3
    Select how the alignment is to be applied:Similarly

ConvertImageToObjects:[module_num:11|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
    Select the input image:ecad_image
    Name the output object:ecad_cells
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:12|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enabled:False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
    Select the input image:NEGecad_image
    Name the output object:NEGecad_cells
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:13|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enabled:False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
    Select the input image:phal_image
    Name the output object:phal_cells
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:14|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
    Select the input image:ALLphal_image
    Name the output object:ALLphal_cells
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Gold_b1
    Name the output image:enhanced_gold_b1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:Red_b1
    Name the output image:enhanced_red_b1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:Farred_b1
    Name the output image:enhanced_farred_b1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:Cy7_b1
    Name the output image:enhanced_cy7_b1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
ImageMath:[module_num:19|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_b1
    Image or measurement?:Image
    Select the first image:enhanced_gold_b1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:enhanced_red_b1
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:enhanced_farred_b1
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:enhanced_cy7_b1
    Multiply the fourth image by:1.0
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
IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:ImageAfterMath_b1
    Name the primary objects to be identified:all_dots_before
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Size of adaptive window:15
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1
    Thresholding method:Robust Background

ExpandOrShrinkObjects:[module_num:21|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
    Select the input objects:all_dots_before
    Name the output objects:sep_dots_pre
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
ExpandOrShrinkObjects:[module_num:22|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
    Select the input objects:sep_dots_pre
    Name the output objects:sep_dots
    Select the operation:Add partial dividing lines between objects
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
MaskObjects:[module_num:23|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
    Select objects to be masked:sep_dots
    Name the masked objects:ecad_dots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ecad_cells
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:24|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
    Parent objects:ecad_cells
    Child objects:ecad_dots
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:25|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enabled:False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
    Select objects to be masked:sep_dots
    Name the masked objects:NEGecad_dots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NEGecad_cells
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:26|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enabled:False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
    Parent objects:NEGecad_cells
    Child objects:NEGecad_dots
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:27|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enabled:False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
    Select objects to be masked:sep_dots
    Name the masked objects:phal_dots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:phal_cells
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:28|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enabled:False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
    Parent objects:phal_cells
    Child objects:phal_dots
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:29|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
    Select objects to be masked:sep_dots
    Name the masked objects:ALLphal_dots
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ALLphal_cells
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:30|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
    Parent objects:ALLphal_cells
    Child objects:ALLphal_dots
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
EnhanceOrSuppressFeatures:[module_num:31|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
    Select the input image:Gold_b2
    Name the output image:enhanced_gold_b2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:32|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
    Select the input image:Red_b2
    Name the output image:enhanced_red_b2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:33|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
    Select the input image:Farred_b2
    Name the output image:enhanced_farred_b2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:34|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
    Select the input image:Cy7_b2
    Name the output image:enhanced_cy7_b2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:35|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
    Select the input image:Gold_b3
    Name the output image:enhanced_gold_b3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:36|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
    Select the input image:Red_b3
    Name the output image:enhanced_red_b3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:37|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
    Select the input image:Farred_b3
    Name the output image:enhanced_farred_b3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:38|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
    Select the input image:Cy7_b3
    Name the output image:enhanced_cy7_b3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
ImageMath:[module_num:39|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:testing
    Image or measurement?:Image
    Select the first image:enhanced_gold_b1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:enhanced_gold_b2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:enhanced_gold_b3
    Multiply the third image by:1.0
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
OverlayOutlines:[module_num:40|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_gold_b2
    Name the output image:gold_b2_ecad
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ecad_dots
    Select outline color:Green
    Select objects to display:ecad_cells

OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_farred_b2
    Name the output image:farred_b2_ecad
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ecad_dots
    Select outline color:Green
    Select objects to display:ecad_cells

OverlayOutlines:[module_num:42|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_gold_b2
    Name the output image:gold_b2_NEGecad
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NEGecad_dots
    Select outline color:Green
    Select objects to display:NEGecad_cells

OverlayOutlines:[module_num:43|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_farred_b2
    Name the output image:farred_b2_NEGecad
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NEGecad_dots
    Select outline color:Green
    Select objects to display:NEGecad_cells

OverlayOutlines:[module_num:44|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_gold_b2
    Name the output image:gold_b2_phal
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:phal_dots
    Select outline color:Green
    Select objects to display:phal_cells

OverlayOutlines:[module_num:45|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_farred_b2
    Name the output image:farred_b2_phal
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:phal_dots
    Select outline color:Green
    Select objects to display:phal_cells

OverlayOutlines:[module_num:46|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_gold_b2
    Name the output image:gold_b2_ALLphal
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ALLphal_dots
    Select outline color:Green
    Select objects to display:ALLphal_cells

OverlayOutlines:[module_num:47|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhanced_farred_b2
    Name the output image:farred_b2_ALLphal
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ALLphal_dots
    Select outline color:Green
    Select objects to display:ALLphal_cells

MeasureObjectIntensity:[module_num:48|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
    Select images to measure:enhanced_cy7_b1, enhanced_cy7_b2, enhanced_cy7_b3, enhanced_farred_b1, enhanced_farred_b2, enhanced_farred_b3, enhanced_gold_b1, enhanced_gold_b2, enhanced_gold_b3, enhanced_red_b1, enhanced_red_b2, enhanced_red_b3
    Select objects to measure:ALLphal_dots, ecad_dots

ExportToSpreadsheet:[module_num:49|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<myPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ALLphal_dots|Intensity_MedianIntensity_enhanced_gold_b2,ALLphal_dots|Intensity_MedianIntensity_enhanced_gold_b3,ALLphal_dots|Intensity_MedianIntensity_enhanced_gold_b1,ALLphal_dots|Intensity_MedianIntensity_enhanced_farred_b3,ALLphal_dots|Intensity_MedianIntensity_enhanced_farred_b1,ALLphal_dots|Intensity_MedianIntensity_enhanced_farred_b2,ALLphal_dots|Intensity_MedianIntensity_enhanced_red_b1,ALLphal_dots|Intensity_MedianIntensity_enhanced_red_b3,ALLphal_dots|Intensity_MedianIntensity_enhanced_red_b2,ALLphal_dots|Intensity_MedianIntensity_enhanced_cy7_b1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:b1_b2_b3_
    Overwrite existing files without warning?:No
    Data to export:ALLphal_dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:50|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<myPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:NEGecad_dots|Location_Center_Y,NEGecad_dots|Location_Center_X,NEGecad_dots|Intensity_MedianIntensity_enhanced_gold_b2,NEGecad_dots|Intensity_MedianIntensity_enhanced_gold_b1,NEGecad_dots|Intensity_MedianIntensity_enhanced_gold_b3,NEGecad_dots|Intensity_MedianIntensity_enhanced_cy7_b2,NEGecad_dots|Intensity_MedianIntensity_enhanced_cy7_b3,NEGecad_dots|Intensity_MedianIntensity_enhanced_cy7_b1,NEGecad_dots|Intensity_MedianIntensity_enhanced_red_b2,NEGecad_dots|Intensity_MedianIntensity_enhanced_red_b1,NEGecad_dots|Intensity_MedianIntensity_enhanced_red_b3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:b1_b2_b3_
    Overwrite existing files without warning?:No
    Data to export:NEGecad_dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:51|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<myPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ecad_dots|Intensity_MaxIntensity_enhanced_farred_b2,ecad_dots|Intensity_MaxIntensity_enhanced_farred_b3,ecad_dots|Intensity_MaxIntensity_enhanced_farred_b1,ecad_dots|Intensity_MaxIntensity_enhanced_gold_b2,ecad_dots|Intensity_MaxIntensity_enhanced_gold_b3,ecad_dots|Intensity_MaxIntensity_enhanced_gold_b1,ecad_dots|Intensity_MaxIntensity_enhanced_cy7_b2,ecad_dots|Intensity_MaxIntensity_enhanced_cy7_b3,ecad_dots|Intensity_MaxIntensity_enhanced_cy7_b1,ecad_dots|Intensity_MaxIntensity_enhanced_red_b3,ecad_dots|Intensity_MaxIntensity_enhanced_red_b2,ecad_dots|Intensity_MaxIntensity_enhanced_red_b1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:b1_b2_b3_
    Overwrite existing files without warning?:No
    Data to export:ecad_dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:52|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|\g<myPath>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:phal_dots|Intensity_MaxIntensity_enhanced_red_b1,phal_dots|Intensity_MaxIntensity_enhanced_red_b3,phal_dots|Intensity_MaxIntensity_enhanced_red_b2,phal_dots|Intensity_MaxIntensity_enhanced_gold_b3,phal_dots|Intensity_MaxIntensity_enhanced_gold_b2,phal_dots|Intensity_MaxIntensity_enhanced_gold_b1,phal_dots|Intensity_MaxIntensity_enhanced_farred_b3,phal_dots|Intensity_MaxIntensity_enhanced_farred_b1,phal_dots|Intensity_MaxIntensity_enhanced_farred_b2,phal_dots|Intensity_MaxIntensity_enhanced_cy7_b3,phal_dots|Intensity_MaxIntensity_enhanced_cy7_b1,phal_dots|Intensity_MaxIntensity_enhanced_cy7_b2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:b1_b2_b3_
    Overwrite existing files without warning?:No
    Data to export:phal_dots
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:enhanced_cy7_b1
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cy7_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:enhanced_farred_b1
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_farred_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:55|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
    Select the type of image to save:Image
    Select the image to save:enhanced_red_b1
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_red_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:56|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
    Select the type of image to save:Image
    Select the image to save:enhanced_gold_b1
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_gold_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:57|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
    Select the type of image to save:Image
    Select the image to save:enhanced_gold_b2
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_gold_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:enhanced_red_b2
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_red_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:59|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
    Select the type of image to save:Image
    Select the image to save:enhanced_farred_b2
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_farred_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:60|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
    Select the type of image to save:Image
    Select the image to save:enhanced_cy7_b2
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cy7_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:61|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
    Select the type of image to save:Image
    Select the image to save:enhanced_gold_b3
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_gold_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:enhanced_red_b3
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_red_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:enhanced_farred_b3
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_farred_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:64|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
    Select the type of image to save:Image
    Select the image to save:enhanced_cy7_b3
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAXb3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cy7_enhanced
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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